PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': "['practice', '1', '2', '3']", 'which eye is blue': "['right', 'left']", 'eye tested': "['right', 'left']", 'previous contrast': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = black
  expName = eyeDomExp
  exportHTML = on Save
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Routines
  Routine contWarning
    CodeComponent checkInputCont
      Code Type = Auto->JS
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      Begin Routine:
        #display txt to verify the calculated contrast was properly input
        if expInfo['previous contrast'] =='' and expInfo['session']!='practice':
            txtVar = 'You did not input the correct contrast value.  Please restart the session and input the value you wrote down from the practice session to the last entry of the dialog box'
            continueRoutine = True
        else:
            continueRoutine=False
            txtVar=''
    TextComponent warningESC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
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  Routine findScreenResol
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        //make python online friendly
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        random=Math.random;
        sort = function(array) {
            return array.sort((a, b) => (a - b));
        }
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }
        Array.prototype.index = [].indexOf;
        sum = (arr) => arr.reduce((a,b)=>a+b)
        tan = Math.tan;
    CodeComponent pxPerCmCode
      Code Type = Auto->JS
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      Begin Experiment:
        x_pix = 400
        pxPerCm = x_pix/8.56 #8.56 is standard size of credit card width
        pxChange = 1
      Each Frame:
        keys=event.getKeys()
        #calculate the pixels per cm from the actual size of the card
        if len(keys):
            if 'up' in keys:
                x_pix = x_pix + pxChange
            elif 'down' in keys:
                x_pix = x_pix - pxChange
            pxPerCm = x_pix/8.56     # divide num of pixels
                                                   # wide by the size in cm
                                                   # of standard card to get
                                                   # resolution (px/cm)
      End Routine:
        thisExp.addData('px per cm', pxPerCm)
    TextComponent instructTop
      letterHeight = .05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please use a credit card or any card of the same size (drivers license, grocery store membership card, etc.)

        Hold it onto the screen, and adjust the image on screen to match the size of your card.

        (If you don't have access to a real card, you can use a ruler to measure image width to 3.37inch or 85.6mm, or make your best guess!)
    TextComponent instructBottom
      letterHeight = .05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        UP arrow = Bigger
        DOWN arrow = Smaller

        Click “Next” when done
    ImageComponent cardImage
      image = images/bankImage.png
      saveStartStop = False
      size [set every frame] = $(x_pix, x_pix * 0.6265625)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent line_R_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_L_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (-x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_T_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, (x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_B_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, -(x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent nextPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Next
      units = norm
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    MouseComponent nextMouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine contWarning
  Routine findScreenResol
